PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = ЭкспНикаИКости
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Routines
  Routine trial
    TextComponent text_pre_audio
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Максимально сконцентрируйтесь!

        Нажмите пробел, чтобы продолжить
    KeyboardComponent key_resp_4
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine Hello
    TextComponent Hello_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Сейчас вам будет показано изображение механизма. Затем вам будет прочитан текст. Вам необходимо будет вслушаться и запомнить информацию оттуда.
        Затем вам будут заданы вопросы в формате правда/ложь.

        Нажмите пробел, чтобы начать :)))
    KeyboardComponent key_resp_Hello
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine Goodbye
    TextComponent bye
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Спасибо за участие!!!
        <3
  Routine Test
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    KeyboardComponent key_resp_3
      allowedKeys = 'a', 'l'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        A — правда              L — ложь
  Routine Audio
    SoundComponent engine
      saveStartStop = False
      sound [set every repeat] = engine.flac
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 128.0
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    TextComponent start_space
      letterHeight = 0.05
      startVal [time (s)] = 128.0
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      text:
        Для ответов на вопросы нажимайте на клавиши A и L

        A — правда              L — ложь

        Нажмите пробел, чтобы перейти к вопросам
  Routine Gif
    MovieComponent movie
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = Двигатель.mp4
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
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Flow
  Routine Hello
  Routine Gif
  Routine trial
  Routine Audio
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ЭкспКиН.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('question', 'Горючее поступает через левое отверстие'), ('corr_ans', 'a')]),
      OrderedDict([('question', 'Свеча находится в нижней плоскости неполого цилиндра'), ('corr_ans', 'l')]),
      OrderedDict([('question', 'Вал находится под свечой\n'), ('corr_ans', 'a')]),
      OrderedDict([('question', 'Свеча находится под основным цилиндром\n'), ('corr_ans', 'l')]),
      OrderedDict([('question', 'Взрыв происходит над валом\n'), ('corr_ans', 'a')]),
      OrderedDict([('question', 'Неполый цилиндр и вал соединены через правое отверстие\n'), ('corr_ans', 'l')]),
      OrderedDict([('question', 'Газ после взрыва выходит через нижнее отверстие\n'), ('corr_ans', 'l')]),
      OrderedDict([('question', 'Свеча находится над валом\n'), ('corr_ans', 'a')]),
      OrderedDict([('question', 'В правом отверстии находится свеча\n'), ('corr_ans', 'l')]),
      OrderedDict([('question', 'Вращение вала заставляет свечу запускать искру\n'), ('corr_ans', 'l')])]
    Routine Test
  LoopTerminator trials
  Routine Goodbye
