PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = ЭкспНикаИКости
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Routines
  Routine trial
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Hello
    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Сейчас вам будет прочитан текст. Вам необходимо будет вслушаться и запомнить информацию оттуда.
        Затем вам будут заданы вопросы в формате правда/ложь.

        Нажмите пробел, чтобы послушать запись :)))
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Goodbye
    TextComponent bye
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Спасибо за участие!!!
        <3
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Test
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    KeyboardComponent key_resp_3
      allowedKeys = 'a', 'l'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        A — правда              L — ложь
Flow
  Routine Hello
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ЭкспКиН.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('question', 'Горючее поступает через левое отверстие'), ('corr_ans', 'a')]),
      OrderedDict([('question', 'Свеча находится в нижней плоскости неполого цилиндра'), ('corr_ans', 'l')]),
      OrderedDict([('question', 'Вал находится под свечой\n'), ('corr_ans', 'a')]),
      OrderedDict([('question', 'Свеча находится под основным цилиндром\n'), ('corr_ans', 'l')]),
      OrderedDict([('question', 'Взрыв происходит над валом\n'), ('corr_ans', 'a')]),
      OrderedDict([('question', 'Неполый цилиндр и вал соединены через правое отверстие\n'), ('corr_ans', 'l')]),
      OrderedDict([('question', 'Газ после взрыва выходит через нижнее отверстие\n'), ('corr_ans', 'l')]),
      OrderedDict([('question', 'Свеча находится над валом\n'), ('corr_ans', 'a')]),
      OrderedDict([('question', 'В правом отверстии находится свеча\n'), ('corr_ans', 'l')]),
      OrderedDict([('question', 'Вращение вала заставляет свечу запускать искру\n'), ('corr_ans', 'l')])]
    Routine Test
  LoopTerminator trials
  Routine Goodbye
